PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = p300_basic
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      wrapWidth = 3
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      text:
        You just heard the target beep.
        In each trial you'll hear a series of different beeps.
        You need to concentrate only on the target
        and count each time it appears.
        The target beep will be played again
         for reminder before you start.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine target_beep
    SoundComponent sound_1
      sound = beep-03.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    TextComponent text_3
      color = grey
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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  Routine beep_change
    SoundComponent sound_2
      sound [set every repeat] = $sound_target
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.1
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  Routine start
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You can press any key to start
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_trial
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Begining of trial:
        Press spacebar
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine target_beep
  Routine Instructions
  Routine target_beep
  Routine start
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine begin_trial
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stim_basic.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [{'stim': 'beep3', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\beep-03.wav', 'target': 1},
        {'stim': 'beep2', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\beep-02.wav', 'target': 0},
        {'stim': 'beep7', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\beep-07.wav', 'target': 0},
        {'stim': 'beep3', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\beep-03.wav', 'target': 1},
        {'stim': 'beep3', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\beep-03.wav', 'target': 1},
        {'stim': 'beep3', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\beep-03.wav', 'target': 1},
        {'stim': 'beep3', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\beep-03.wav', 'target': 1},
        {'stim': 'beep3', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\beep-03.wav', 'target': 1},
        {'stim': 'beep3', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\beep-03.wav', 'target': 1},
        {'stim': 'beep3', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\beep-03.wav', 'target': 1},
        {'stim': 'beep3', 'color': 'black', 'sound_target': 'C:\\Users\\yarde\\Documents\\GitHub\\BCI4ALS-MI\\beep-03.wav', 'target': 1}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
      Routine beep_change
    LoopTerminator trials
  LoopTerminator trials_2
